<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Title>Tumor Unlimited Supply</Title>
        <Details>Full title:        Tumor Growth: Unlimited Oxygen and Glucose Supply
Date: 	21.01.2022
Authors: 	N. Jagiella, D. Rickert, F. J. Theis, J. Hasenauer
Curators: 	R. Müller, L. Brusch
Software: 	Morpheus (open-source), download from https://morpheus.gitlab.io
ModelID: 	https://identifiers.org/morpheus/M0007
Reference:    This model reproduces the published results of scenario I, originally obtained with a different simulator:
                       N. Jagiella, D. Rickert, F. J. Theis, J. Hasenauer: Parallelization and High-Performance Computing Enables Automated Statistical Inference of Multi-scale Models. Cell Systems 4 (2): 194-206.e9, 2017.
https://doi.org/10.1016/j.cels.2016.12.002

The model is set up for 2D but in principle ready for 3D as well.
</Details>
    </Description>
    <Global>
        <Field value="0" symbol="e" name="ECM">
            <BoundaryValue value="0.0" boundary="x"/>
            <BoundaryValue value="0.0" boundary="-x"/>
            <BoundaryValue value="0.0" boundary="y"/>
            <BoundaryValue value="0.0" boundary="-y"/>
        </Field>
        <System solver="Dormand-Prince [adaptive, O(5)]">
            <DiffEqn symbol-ref="e">
                <Expression>ke_pro*c-ke_deg*e</Expression>
            </DiffEqn>
        </System>
        <Constant value="3.2e-2" symbol="k_div_max"/>
        <Constant value="1e-3" symbol="k_re_max"/>
        <Constant value="2" symbol="m_g"/>
        <Constant value="10" symbol="m_d"/>
        <Constant value="3.0e-3" symbol="e_div"/>
        <Constant value="1.3e2/length_unit" symbol="L_div"/>
        <Constant value="16" symbol="V_target"/>
        <Constant value="0.0" symbol="c" name="indicator of Prolif_cell or Quiesc_cell"/>
        <Constant value="0.0" symbol="c_nec"/>
        <Constant value="1e-1" symbol="kg"/>
        <Constant value="6.8e-2" symbol="kmg"/>
        <Constant value="1.2e2/length_unit" symbol="L_init"/>
        <Constant value="7.5e-1" symbol="q_init"/>
        <Constant value="5.0e-4" symbol="ke_pro"/>
        <Constant value="3.3e-3" symbol="ke_deg"/>
        <Variable value="0" symbol="V_spheroid"/>
        <Mapper name="V_spheroid">
            <Input value="cell.volume"/>
            <Output mapping="sum" symbol-ref="V_spheroid"/>
        </Mapper>
        <Function symbol="radius.micrometer">
            <Expression>max(L_init,sqrt(V_spheroid/pi))*length_unit</Expression>
        </Function>
        <Constant value="16.8/sqrt(4*V_target/pi)" symbol="length_unit"/>
        <Constant value="pi*L_init^2/V_target" symbol="N_init"/>
        <Function symbol="time.day">
            <Expression>time/24</Expression>
        </Function>
        <Constant value="0.0" symbol="e_cell"/>
        <!--    <Disabled>
        <NeighborhoodReporter>
            <Input value="prolif"/>
            <Output mapping="average" symbol-ref="meanprolif"/>
        </NeighborhoodReporter>
    </Disabled>
-->
        <Variable value="0.0" symbol="meanprolif"/>
        <Constant value="0.0" symbol="prolif"/>
    </Global>
    <Space>
        <Lattice class="square">
            <Size value="500, 500, 0" symbol="size"/>
            <BoundaryConditions>
                <Condition boundary="x" type="constant"/>
                <Condition boundary="-x" type="constant"/>
                <Condition boundary="y" type="constant"/>
                <Condition boundary="-y" type="constant"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="480" symbol="stoptime"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="medium" name="medium">
            <Constant tags="new" value="0" symbol="cell.volume"/>
            <Property value="0.0" symbol="L"/>
            <Property tags="new" value="0.0" symbol="medium_contact"/>
            <Property value="0.0" symbol="m"/>
            <Function symbol="L.micrometer">
                <Expression>L*length_unit</Expression>
            </Function>
            <!--    <Disabled>
        <Variable value="0.0" symbol="meanprolif"/>
    </Disabled>
-->
            <NeighborhoodReporter>
                <Input scaling="length" value="prolif"/>
                <Output mapping="average" symbol-ref="meanprolif"/>
            </NeighborhoodReporter>
            <Property value="0.0" symbol="meanprolif"/>
        </CellType>
        <CellType class="biological" name="Quiesc_cell">
            <VolumeConstraint strength="1" name="V_target" target="V_target"/>
            <ChangeCellType time-step="1.0" newCellType="Prolif_cell" name="-> Prolif_cell">
                <Triggers>
                    <Rule name="p_re" symbol-ref="prolif">
                        <Expression>rand_uni(0,1) &lt; (exp(-L/L_div)*(e_cell>e_div))</Expression>
                    </Rule>
                </Triggers>
                <Condition>rand_uni(0,1) &lt; k_re_max</Condition>
            </ChangeCellType>
            <Constant value="1" symbol="c" name="indicator for Global/Fields"/>
            <Property value="0" symbol="e_cell_inter" name="intermediate for ECM"/>
            <Mapper name="e_cell_inter">
                <Input value="e"/>
                <Output mapping="average" symbol-ref="e_cell_inter"/>
            </Mapper>
            <Property value="0" symbol="e_cell"/>
            <Event time-step="1" trigger="when-true" name="e_cell" compute-time="on-execution">
                <Condition>1</Condition>
                <Rule symbol-ref="e_cell">
                    <Expression>e_cell_inter</Expression>
                </Rule>
            </Event>
            <Property value="1" symbol="m"/>
            <Property value="-1" symbol="prolif"/>
            <Property tags="new" value="0.0" symbol="medium_contact"/>
            <NeighborhoodReporter tags="new" name="medium_contact">
                <Input scaling="cell" value="cell.type == celltype.medium.id" noflux-cell-medium="false"/>
                <Output mapping="maximum" symbol-ref="medium_contact"/>
            </NeighborhoodReporter>
            <Property value="0.0" symbol="L"/>
            <NeighborhoodReporter time-step="1.0" name="propagate distance">
                <Input scaling="cell" value="L"/>
                <Output mapping="minimum" symbol-ref="LTmp"/>
            </NeighborhoodReporter>
            <Property value="1000000" symbol="LTmp"/>
            <System time-step="1.0" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="L">
                    <Expression>if(medium_contact==1,sqrt(4*cell.volume/pi),LTmp+sqrt(4*cell.volume/pi))</Expression>
                </Rule>
            </System>
            <Function symbol="L.micrometer">
                <Expression>L*length_unit</Expression>
            </Function>
            <NeighborhoodReporter>
                <Input scaling="length" value="prolif"/>
                <Output mapping="average" symbol-ref="meanprolif"/>
            </NeighborhoodReporter>
            <Property value="0.0" symbol="meanprolif"/>
        </CellType>
        <CellType class="biological" name="Prolif_cell">
            <Property value="0" symbol="e_cell_inter" name="intermediate for ECM"/>
            <Mapper name="e_cell_inter">
                <Input value="e"/>
                <Output mapping="average" symbol-ref="e_cell_inter"/>
            </Mapper>
            <Property value="0" symbol="e_cell"/>
            <Event time-step="1" trigger="when-true" name="e_cell" compute-time="on-execution">
                <Condition>1</Condition>
                <Rule symbol-ref="e_cell">
                    <Expression>e_cell_inter</Expression>
                </Rule>
            </Event>
            <Property value="1" symbol="m"/>
            <Property value="1" symbol="prolif"/>
            <VolumeConstraint strength="1" name="V_target*(1+m>=m_g)" target="V_target*(1+m>=m_g)"/>
            <CellDivision division-plane="random" trigger="when-true" name="m == m_d">
                <Condition>m == m_d*(e_cell>-1)</Condition>
                <Triggers>
                    <Rule symbol-ref="m">
                        <Expression>1</Expression>
                    </Rule>
                    <!--    <Disabled>
        <Rule symbol-ref="prolif">
            <Expression>rand_uni(0,1) &lt; (exp(-L/L_div)*(e_cell>e_div)*(ka>ka_div)*(l_cell&lt;l_div)*(nwo_max>nwo))</Expression>
        </Rule>
    </Disabled>
-->
                    <Rule symbol-ref="prolif">
                        <Expression>rand_uni(0,1) &lt; (exp(-L/L_div)*(e_cell>e_div))</Expression>
                    </Rule>
                </Triggers>
            </CellDivision>
            <ChangeCellType time-step="1.0" newCellType="Quiesc_cell" name="-> Quiesc_cell">
                <Condition>prolif == 0</Condition>
                <Triggers>
                    <Rule symbol-ref="m">
                        <Expression>1</Expression>
                    </Rule>
                </Triggers>
            </ChangeCellType>
            <Constant value="1" symbol="c" name="indicator for Global/Fields"/>
            <Event time-step="1" trigger="when-true" name="m -> m+1" compute-time="on-execution">
                <Condition>1</Condition>
                <!--    <Disabled>
        <Rule symbol-ref="m">
            <Expression>m+(rand_uni(0,1)&lt;(k_div_max*m_d*(1-0.5*(o_cell&lt;o_div))*(1-0.5*(w_cell>w_div))))</Expression>
        </Rule>
    </Disabled>
-->
                <Rule symbol-ref="m">
                    <Expression>m+(rand_uni(0,1)&lt;k_div_max*m_d)</Expression>
                </Rule>
            </Event>
            <Property tags="new" value="0.0" symbol="medium_contact"/>
            <NeighborhoodReporter tags="new" name="medium_contact">
                <Input scaling="cell" value="cell.type == celltype.medium.id" noflux-cell-medium="false"/>
                <Output mapping="maximum" symbol-ref="medium_contact"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter time-step="1.0" name="L-Neighbours">
                <Input scaling="cell" value="L"/>
                <Output mapping="minimum" symbol-ref="LTmp"/>
            </NeighborhoodReporter>
            <Property value="1000000" symbol="LTmp" name="temp for propagating distance"/>
            <System time-step="1.0" solver="Dormand-Prince [adaptive, O(5)]">
                <Rule symbol-ref="L">
                    <Expression>if(medium_contact==1,sqrt(4*cell.volume/pi),LTmp+sqrt(4*cell.volume/pi))</Expression>
                </Rule>
            </System>
            <Property value="0.0" symbol="L"/>
            <Function symbol="L.micrometer">
                <Expression>L*length_unit</Expression>
            </Function>
            <!--    <Disabled>
        <Function symbol="">
            <Expression>if(L.micrometer&lt;50,prolif</Expression>
        </Function>
    </Disabled>
-->
            <!--    <Disabled>
        <Variable value="0.0" symbol="meanprolif"/>
    </Disabled>
-->
            <NeighborhoodReporter>
                <Input scaling="length" value="prolif"/>
                <Output mapping="average" symbol-ref="meanprolif"/>
            </NeighborhoodReporter>
            <Property value="0.0" symbol="meanprolif"/>
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction default="0">
            <Contact type2="Prolif_cell" type1="Prolif_cell" value="10"/>
            <Contact type2="Quiesc_cell" type1="Prolif_cell" value="10"/>
            <Contact type2="Quiesc_cell" type1="Quiesc_cell" value="10"/>
            <Contact type2="medium" type1="Prolif_cell" value="6"/>
            <Contact type2="medium" type1="Quiesc_cell" value="6"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.2"/>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
            <MetropolisKinetics yield="0.1" temperature="3"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="1" type="Prolif_cell">
            <InitProperty symbol-ref="prolif">
                <Expression>1 - (rand_uni(0,1) &lt; q_init)</Expression>
            </InitProperty>
            <InitCircle mode="random" number-of-cells="N_init">
                <Dimensions center="size.x/2,size.y/2,0" radius="L_init"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <Analysis>
        <!--    <Disabled>
        <Gnuplotter time-step="10">
            <Terminal size="2560,1440,0" name="png"/>
            <Plot>
                <Disabled>
                    <Cells value="cell.type">
                        <Disabled>
                            <ColorMap>
                                <Color color="light-green" value="0"/>
                                <Color color="light-blue" value="1"/>
                                <Color color="red" value="2"/>
                                <Color color="black" value="3"/>
                            </ColorMap>
                        </Disabled>
                    </Cells>
                </Disabled>
                <Field symbol-ref="cell.type">
                    <ColorMap>
                        <Color color="white" value="0"/>
                        <Color color="yellow" value="1"/>
                        <Color color="red" value="2"/>
                    </ColorMap>
                </Field>
            </Plot>
            <Plot>
                <Field symbol-ref="e_cell"/>
            </Plot>
        </Gnuplotter>
    </Disabled>
-->
        <!--    <Disabled>
        <Logger time-step="10">
            <Input>
                <Symbol symbol-ref="celltype.Prolif_cell.size"/>
                <Symbol symbol-ref="celltype.Quiesc_cell.size"/>
                <Symbol symbol-ref="cell.volume"/>
                <Symbol symbol-ref="radius.micrometer"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot>
                    <Style grid="true" point-size="0.5" style="linespoints"/>
                    <Terminal terminal="png"/>
                    <X-axis maximum="stoptime/24" minimum="0">
                        <Symbol symbol-ref="time.day"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="celltype.Prolif_cell.size"/>
                        <Symbol symbol-ref="celltype.Quiesc_cell.size"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
    </Disabled>
-->
        <ModelGraph format="png" reduced="false" include-tags="#untagged,new"/>
        <!--    <Disabled>
        <Logger time-step="1.0">
            <Input>
                <Disabled>
                    <Symbol symbol-ref="L"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="L_div"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="cell.id"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="e_cell"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="ka"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="l_cell"/>
                </Disabled>
                <Disabled>
                    <Symbol symbol-ref="nwo"/>
                </Disabled>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
    </Disabled>
-->
        <Logger time-step="10">
            <Input>
                <Symbol symbol-ref="time.day"/>
                <Symbol symbol-ref="radius.micrometer"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot>
                    <Style grid="true" line-width="1.0" decorate="true" point-size="0.5" style="linespoints"/>
                    <Terminal terminal="png"/>
                    <X-axis maximum="stoptime/24" minimum="0">
                        <Symbol symbol-ref="time.day"/>
                    </X-axis>
                    <Y-axis maximum="800.0" minimum="0.0">
                        <Symbol symbol-ref="radius.micrometer"/>
                    </Y-axis>
                </Plot>
            </Plots>
        </Logger>
        <Logger time-step="10">
            <Input>
                <Symbol symbol-ref="e_cell"/>
                <Symbol symbol-ref="L.micrometer"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
            <Plots>
                <Plot time-step="10" file-numbering="time">
                    <Style grid="true" line-width="1.0" decorate="true" point-size="0.5" style="points"/>
                    <Terminal terminal="png"/>
                    <X-axis>
                        <Symbol symbol-ref="L.micrometer"/>
                    </X-axis>
                    <Y-axis>
                        <Symbol symbol-ref="e_cell"/>
                    </Y-axis>
                    <Range>
                        <Time mode="current"/>
                    </Range>
                </Plot>
            </Plots>
        </Logger>
        <!--    <Disabled>
        <TiffPlotter format="guess" time-step="0.2" compression="false">
            <Channel symbol-ref="e"/>
            <Channel symbol-ref="e_cell"/>
        </TiffPlotter>
    </Disabled>
-->
    </Analysis>
</MorpheusModel>
